CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OriginalImage
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

Crop:[module_num:5|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notes:['Crop for testing']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enabled:False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
    Select the input image:OriginalImage
    Name the output image:OrigCropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,500
    Top and bottom rectangle positions:0,500
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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
    Select the input image:OriginalImage
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:DUTP
    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DNA
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
IdentifyPrimaryObjects:[module_num:7|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notes:['DNA objects']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
    Select the input image:DNA
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):2,200
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MaskImage:[module_num:8|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
    Select the input image:DUTP
    Name the output image:DUTPonDNA
    Use objects or an image as a mask?:Objects
    Select object for mask:DNA
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['All DUTP objects']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
    Select the input image:DUTP
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifyPrimaryObjects:[module_num:10|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notes:['DUTP on DNA objects']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
    Select the input image:DUTPonDNA
    Name the primary objects to be identified:DUTPonDNA
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureCorrelation:[module_num:11|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notes:['DUTP on DNA correlation']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
    Hidden:2
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:DUTP
    Select where to measure correlation:Within objects
    Select an object to measure:DNA

MeasureObjectSizeShape:[module_num:12|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notes:['DNA Size Shape']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
    Select objects to measure:DNA
    Select objects to measure:DUTPonDNA
    Calculate the Zernike features?:No

DisplayHistogram:[module_num:13|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notes:['DNA length']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
    Select the object whose measurements will be displayed:DNA
    Select the object measurement to plot:AreaShape_MajorAxisLength
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:DNA MajorAxisLength
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:14|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notes:['DUTP on DNA Histogram']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
    Select the object whose measurements will be displayed:DUTPonDNA
    Select the object measurement to plot:AreaShape_MajorAxisLength
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:DUTP on DNA major axis length
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::StretchQuant_
    Overwrite without warning?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Objects
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    Select the objects to save:DNA
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:DNA_
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:Blues
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Objects
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    Select the objects to save:Spots
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Spots_
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:Oranges
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Objects
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    Select the objects to save:DUTPonDNA
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:dUTP-on-DNA_
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:Reds
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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